PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/train/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 0.0 train_func
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine train_instr
    CodeComponent set_up
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        #add counterbalance and match/mismatch keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])


        if last_three_digits % 2 == 0:
            match_key = '1'
            mismatch_key = '2'
            instr_message = "Vous verrez une image, puis un écran blanc, puis un mot. Appuyez sur '1' si le mot correspond à l’image, et sur '2' s’il ne correspond pas. Appuyez sur la barre d’espace pour commencer."
        else :
            match_key = '2'
            mismatch_key = '1'
            instr_message = "Vous verrez une image, puis un écran blanc, puis un mot. Appuyez sur '2' si le mot correspond à l’image, et sur '1' s’il ne correspond pas. Appuyez sur la barre d’espace pour commencer."


        allowed_keys_list = [match_key, mismatch_key]

        # Store these for later use in routines
        expInfo['match_key'] = match_key
        expInfo['mismatch_key'] = mismatch_key
        expInfo['allowed_keys_list'] = allowed_keys_list

        #add cond file



        resp_count = 0
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $instr_message
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_ready
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Appuyer sur la barre d'espace pour débuter
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    KeyboardComponent exit_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_1
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    ImageComponent image_train
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine word_1
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    TextComponent word_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $words
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  Routine image_2
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  Routine word_2
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  Routine image
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  Routine word
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  Routine image_4
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  Routine word_4
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  Routine end_training
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  Routine fix
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    TextComponent text_2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine blank
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        randomizer = random.randint(0, 10)

        time_of_blank = 1.0 + (randomizer/10)
    TextComponent blank_interval
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_of_blank
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  Routine resp
    CodeComponent resp_counter
      Code Type = Auto->JS
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      Begin Routine:
        if match == 'match':
            right_answer = allowed_keys_list[0]
        elif match == 'n_match':
            right_answer = allowed_keys_list[1]
      Each Frame:
        if key_resp.keys == right_answer:
            continueRoutine = False
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Indiquer si le mot correspond à l'image précédente à l'aide de {allowed_keys_list}"
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = $allowed_keys_list
      forceEndRoutine = False
      startVal [time (s)] = 0
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  Routine feedback
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Flow
  Routine train_instr
  Routine train_ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = train_cond/train_cond.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'amande'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'valise'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'amande'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'valise'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'valise'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'amande'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'amande'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'amande'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'amande'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'valise'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'valise'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_1.png'), ('words', 'amande'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'valise'), ('match', 'match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'amande'), ('match', 'n_match')]),
      OrderedDict([('images', '/stimuli/training_2.png'), ('words', 'valise'), ('match', 'match')])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
    Routine fix
    Routine image_1
    Routine word_1
    Routine blank
    Routine resp
  LoopTerminator trials
  Routine end_training
