PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/rest_state/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 2. rest_state
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent instr_rest_state
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Il vous est demandé de rester devant l'écran, les yeux ouverts, sans rien faire pendant les prochaines minutes
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_eeg
      Code Type = Auto->JS
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      Begin Experiment:
        # EEG
        import struct
        import serial
        import time
        # Trigger box Plus COM port
        adress = 'COM17'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=2000000)
            time.sleep(1) # Wait to make sure it's open
            return port

        def write_port(port, pin):
            """
            Turn on one of the ditigal pin
            pin: integer in range 2-13
            """
            # Convert to string
            string = b'' + struct.pack('!B', pin)
            # Write
            port.write(string)

        port = init_port(adress)
        port.write([0x00])

        # Init EEG
        from psychopy.hardware import brainproducts
        rcs = brainproducts.RemoteControlServer(host='192.168.1.2',timeout=5)

        rcs.openRecorder()
        time.sleep(2)
        rcs.workspace = 'C:/Users/labmp-eeg/Desktop/antoine_cognitivemaps/antoine_cognitivemaps.rwksp'
        rcs.participant = expInfo['participant'] + '_' + expInfo['date']
        rcs.expName = 'cmaps_rest_state'
        time.sleep(5)
        rcs.mode = 'monitor'
        time.sleep(2)
  Routine rest_state
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    CodeComponent eeg_fix
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Merci !
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  Routine start_eeg
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    CodeComponent start_eeg_2
      Code Type = Auto->JS
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      Begin Routine:
        rec_start = core.monotonicClock.getTime()
        rcs.startRecording()
    TextComponent check_eeg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Vérifier EEG
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine start_eeg
  Routine rest_state
  Routine end
