PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/func_loc/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = FunctionalLocalizer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine setup_experiment
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    CodeComponent set_up
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        #add counterbalance and match/mismatch keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])


        if last_three_digits % 2 == 0:
            match_key = '1'
            mismatch_key = '2'
            instr_message = "Vous verrez une image, puis un écran blanc, puis un mot. Appuyez sur '1' si le mot correspond à l’image, et sur '2' s’il ne correspond pas. Appuyez sur la barre d’espace pour commencer."
        else :
            match_key = '2'
            mismatch_key = '1'
            instr_message = "Vous verrez une image, puis un écran blanc, puis un mot. Appuyez sur '2' si le mot correspond à l’image, et sur '1' s’il ne correspond pas. Appuyez sur la barre d’espace pour commencer."


        allowed_keys_list = [match_key, mismatch_key]

        # Store these for later use in routines
        expInfo['match_key'] = match_key
        expInfo['mismatch_key'] = mismatch_key
        expInfo['allowed_keys_list'] = allowed_keys_list

        #open condition file to create list of match per trials
        import pandas as pd

        condition_path = f"output_localizers/localizer_conditions_{last_three_digits}.csv"

        df_condition = pd.read_csv(condition_path)

        if last_three_digits % 2 == 0:
            df_condition['corrAns'] = df_condition['is_match'].map({'match': 1, 'mismatch': 2})
        else:
            df_condition['corrAns'] = df_condition['is_match'].map({'match': 2, 'mismatch': 1})

        df_condition.to_csv(condition_path, index=False)

        #add trials counter for break

        trials_counter= 0
    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $instr_message
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_eeg
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        # EEG
        import struct
        import serial
        import time
        # Trigger box Plus COM port
        adress = 'COM17'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=2000000)
            time.sleep(1) # Wait to make sure it's open
            return port

        def write_port(port, pin):
            """
            Turn on one of the ditigal pin
            pin: integer in range 2-13
            """
            # Convert to string
            string = b'' + struct.pack('!B', pin)
            # Write
            port.write(string)

        port = init_port(adress)
        port.write([0x00])

        # Init EEG
        from psychopy.hardware import brainproducts
        rcs = brainproducts.RemoteControlServer(host='192.168.1.2',timeout=5)

        rcs.openRecorder()
        time.sleep(2)
        rcs.workspace = 'C:/Users/labmp-eeg/Desktop/antoine_cognitivemaps/antoine_cognitivemaps.rwksp'
        rcs.participant = expInfo['participant'] + '_' + expInfo['date']
        rcs.expName = 'cmapsfuncloc'
        time.sleep(5)
        rcs.mode = 'monitor'
        time.sleep(2)
  Routine block_msg
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    TextComponent block_msg_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $f"Début du bloc 1 sur 1. Appuyez sur la barre d’espace pour continuer."
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    KeyboardComponent key_resp_block_msg
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inside_loop
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  Routine feedback_routine
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    TextComponent feedback_text_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_message
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #skip feedback if right answer
        if not show_feedback_flag:
            continueRoutine = False
  Routine iti_routine
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    TextComponent iti_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = +
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text =  La première partie de l’expérience est terminée.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        image_display_dur = 1.0
        word_display_duration = 1.0
        total_response_time_allowed = 2.0

        trials_counter = trials_counter + 1
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent eeg_fix
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if fixation.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine trials_image
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    CodeComponent eeg_image
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if stim_image.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x04') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor
      Code Type = Auto->JS
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=50,
            height=50,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if stim_image.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
    ImageComponent stim_image
      image [set during: load_images.preload_current_image_2] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_display_dur
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  Routine trials_word
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    CodeComponent eeg_word
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if stim_word.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x20') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    TextComponent stim_word
      letterHeight = 0.05
      startVal [time (s)] =  0
      stopVal [duration (s)] = $word_display_duration
      text [set during: load_images.preload_current_image_2] = $presented_word
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  Routine trials_resp
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  Routine blank
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        randomizer = random.randint(0, 10)

        time_of_blank = 1.0 + (randomizer/10)
    TextComponent blank_interval
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_of_blank
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    CodeComponent eeg_blank
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if blank_interval.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x02') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine response
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = $allowed_keys_list
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $total_response_time_allowed
      storeCorrect = True
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    CodeComponent timer
      Code Type = Auto->JS
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      Each Frame:
        t = routineTimer.getTime()
        if t > key_resp.tStart + total_response_time_allowed and not key_resp.keys:
            key_resp.corr = 0
            thisExp.addData('timeout', 1)
            continueRoutine = False
    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Store data
        thisExp.addData('image_presented', image_file)
        thisExp.addData('word_presented', presented_word)
        thisExp.addData('is_match_condition', is_match) # from conditions file

        if key_resp.keys:
            thisExp.addData('response_given', key_resp.keys[0])
            thisExp.addData('response_correct', key_resp.corr)
            thisExp.addData('response_rt', key_resp.rt)
        else: # Timeout
            thisExp.addData('response_given', None)
            thisExp.addData('response_correct', 0) # Mark as incorrect or a specific timeout code
            thisExp.addData('response_rt', None)

        # Determine feedback message
        feedback_message = ""
        show_feedback_flag = False

        if not key_resp.keys: # Timeout
            feedback_message = "Délai de réponse dépassé. Veuillez répondre rapidement."
            show_feedback_flag = True
        elif not key_resp.corr: # Incorrect response
            feedback_message = "Mauvaise réponse"
            show_feedback_flag = True
        # else: correct response, no feedback_message, show_feedback_flag remains False

        # To be used in the feedback routine
        thisExp.addData('feedback_message_to_show', feedback_message)
        thisExp.addData('show_feedback_flag_value', show_feedback_flag)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $total_response_time_allowed
      text [set every repeat] = $f"Indiquer si le mot correspond à l'image précédente à l'aide de {allowed_keys_list}"
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    CodeComponent eeg_resp
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x08') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine break_2
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    CodeComponent break_code
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        timer = core.Clock()
      Begin Routine:
        if trials_counter in [74, 128, 222]:
            continueRoutine = True
        else:
            continueRoutine = False


        stimclock = core.Clock()
        starttime = stimclock.getTime()
      Each Frame:
        remaining = str(60 - round(stimclock.getTime()- starttime))
        text_clock = '      Bloc Terminé, pause '   +  remaining  + ' sec        ' + '           Appuyer sur p lorsque vous serez prêt pour le prochain bloc.    '
    TextComponent timer_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_clock
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    KeyboardComponent finish_time
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_eeg
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Vérifier eeg
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_eeg_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        rec_start = core.monotonicClock.getTime()
        rcs.startRecording()
  Routine load_images
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    StaticComponent preload_current_image_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine setup_experiment
  Routine start_eeg
  LoopInitiator inside_loop_trials loopType="TrialHandler"
    conditionsFile = $condition_path
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image_file', 'stimuli/scissor.png'), ('presented_word', 'scissor'), ('is_match', 'match'), ('blank_duration', 1.78), ('iti_duration', 2.3), ('corrAns', 1)]),
      OrderedDict([('image_file', 'stimuli/scissor.png'), ('presented_word', 'banana'), ('is_match', 'mismatch'), ('blank_duration', 1.76), ('iti_duration', 2.21), ('corrAns', 2)]),
      OrderedDict([('image_file', 'stimuli/zebra.png'), ('presented_word', 'zebra'), ('is_match', 'match'), ('blank_duration', 1.38), ('iti_duration', 2.97), ('corrAns', 1)]),
      OrderedDict([('image_file', 'stimuli/scissor.png'), ('presented_word', 'zebra'), ('is_match', 'mismatch'), ('blank_duration', 1.88), ('iti_duration', 2.4), ('corrAns', 2)]),
      OrderedDict([('image_file', 'stimuli/scissor.png'), ('presented_word', 'scissor'), ('is_match', 'match'), ('blank_duration', 1.08), ('iti_duration', 1.04), ('corrAns', 1)]),
      OrderedDict([('image_file', 'stimuli/zebra.png'), ('presented_word', 'zebra'), ('is_match', 'match'), ('blank_duration', 1.81), ('iti_duration', 1.38), ('corrAns', 1)]),
      OrderedDict([('image_file', 'stimuli/face.png'), ('presented_word', 'face'), ('is_match', 'match'), ('blank_duration', 1.54), ('iti_duration', 2.95), ('corrAns', 1)]),
      OrderedDict([('image_file', 'stimuli/banana.png'), ('presented_word', 'banana'), ('is_match', 'match'), ('blank_duration', 1.81), ('iti_duration', 2.37), ('corrAns', 1)])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
    Routine load_images
    Routine fixation_2
    Routine trials_image
    Routine trials_word
    Routine blank
    Routine response
    Routine feedback_routine
    Routine iti_routine
    Routine break_2
  LoopTerminator inside_loop_trials
  Routine end
