PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/learn_prob/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = learn_probe
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine instructions
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    CodeComponent init_eeg
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        # EEG
        import struct
        import serial
        import time
        # Trigger box Plus COM port
        adress = 'COM17'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=2000000)
            time.sleep(1) # Wait to make sure it's open
            return port

        def write_port(port, pin):
            """
            Turn on one of the ditigal pin
            pin: integer in range 2-13
            """
            # Convert to string
            string = b'' + struct.pack('!B', pin)
            # Write
            port.write(string)

        port = init_port(adress)
        port.write([0x00])

        # Init EEG
        from psychopy.hardware import brainproducts
        rcs = brainproducts.RemoteControlServer(host='192.168.1.2',timeout=5)

        rcs.openRecorder()
        time.sleep(2)
        rcs.workspace = 'C:/Users/labmp-eeg/Desktop/antoine_cognitivemaps/antoine_cognitivemaps.rwksp'
        rcs.participant = expInfo['participant'] + '_' + expInfo['date']
        rcs.expName = 'cmaps_learn_prob'
        time.sleep(5)
        rcs.mode = 'monitor'
        time.sleep(2)
    TextComponent instructions_main
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Cette partie de l'expérience se divise en deux phases, répétées trois fois.
        Dans un premier temps, vous devrez apprendre des liens entre des paires d'images présentées, sans effectuer de réponse active.
        Ensuite, lors de la deuxième phase, une image vous sera présentée, puis vous devrez indiquer si l’image suivante correspond à la prochaine dans la séquence apprise.
    KeyboardComponent instr_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent exp_beginning
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        #add counterbalance and allowed keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])

        if last_three_digits % 2 == 0:
            sequence_good = '1'
            sequence_bad = '2'
            instr_message = " Vous verrez une image. Vous devrez ensuite vous imaginer la séquence complète des images qui la suivent. Une seconde image apparaîtra ensuite. Appuyez sur '1' si cette image est la prochaine dans la séquence, et sur '2' si ce n’est pas le cas. Appuyez sur la barre d’espace pour commencer."
        else :
            sequence_good = '2'
            sequence_bad = '1'
            instr_message = " Vous verrez une image. Vous devrez ensuite vous imaginer la séquence complète des images qui la suivent. Une seconde image apparaîtra ensuite. Appuyez sur '2' si cette image est la prochaine dans la séquence, et sur '1' si ce n’est pas le cas. Appuyez sur la barre d’espace pour commencer."

        allowed_keys_list = [sequence_good, sequence_bad]

        # Store these for later use in routines
        expInfo['sequence_good_key'] = sequence_good
        expInfo['sequence_bad_key'] = sequence_bad
        expInfo['allowed_keys_list'] = allowed_keys_list

        #open condition file to create list of sequence_good per trials
        import pandas as pd

        condition_probe = f"conditions_probe/probe_learning_conditions_{last_three_digits}.csv"

        condition_learn = f"conditions_learning/learning_conditions_{last_three_digits}.csv"

        answer_counter = 0
  Routine instructions_learning
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Des images vous seront présentées par paires. Vous devez apprendre les liens entre les images sans donner de réponse.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_learning
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    TextComponent fix_learn_cross
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    CodeComponent eeg_fix
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0

        #trigger 0 = fixation cross for learning
      Each Frame:
        if fix_learn_cross.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine image_learn_1
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    CodeComponent eeg_image_1
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if first_of_pair.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x04') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    ImageComponent first_of_pair
      image [set during: image_load_2.load_images_2] = $stim1_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent photo_sensor
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if first_of_pair.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
  Routine break_img_learn
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    CodeComponent eeg_blank
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if break_random.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x02') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent random_break_timer
      Code Type = Auto->JS
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      Begin Routine:
        import random

        random_break = random.uniform(1.0, 3.0)
    TextComponent break_random
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random_break
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  Routine image_learn_2
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    ImageComponent second_of_pair
      image [set during: image_load_2.load_images_2] = $stim2_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent eeg_image_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0

        #this trigger corresponds to word trigger in code 1
      Each Frame:
        if second_of_pair.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x10') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if second_of_pair.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
  Routine routine_5s_break
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    TextComponent five_s_break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent save_data_learn
      Code Type = Auto->JS
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      Each Frame:
        if fix_learn_cross.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x20') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        # store data
        thisExp.addData('pair_stim_1',stim1_img)
        thisExp.addData('pair_stim_2',stim2_img)
        thisExp.addData('random_break_dur',random_break)
  Routine probe_instr
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    TextComponent probe_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $instr_message
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    KeyboardComponent end_probe_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine probe_cue
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    ImageComponent probe_cue_1
      image [set during: image_loader.image_load] = $target_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent eeg_prob_1
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        #Check trigger 5


        if probe_cue_1.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x04') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if probe_cue_1.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
  Routine probe_imagination
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    CodeComponent imagination_timer
      Code Type = Auto->JS
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      Begin Routine:
        import random

        prob_imagination_dur = random.uniform(1.0, 3.0)
    TextComponent imagination_woot
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prob_imagination_dur
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    CodeComponent eeg_blank_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if probe_cue_1.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x02') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine probe_test
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    ImageComponent prob_test_img
      image [set during: image_loader.image_load] = $prob_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent eeg_probe_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        #check trigger 6

        if prob_test_img.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x20') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor_4
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if prob_test_img.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
  Routine probe_resp
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    CodeComponent eeg_resp
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text_4.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x08') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    KeyboardComponent probe_resp_test
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = answer
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  Routine probe_break
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random

        prob_break = random.uniform(1.0, 3.0)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prob_break
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    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        #store data
        thisExp.addData('target_image', target_img)
        thisExp.addData('probe_image', prob_img)

        if is_match == 'match':
            correct_key = sequence_good
        else :
            correct_key = sequence_bad

        if probe_resp_test.keys and probe_resp_test.keys[0] == correct_key:
            thisExp.addData('response_good_bad', 1)
            answer_counter = answer_counter + 1
        else:
            thisExp.addData('response_good_bad', 0)

        if probe_resp_test.keys:
            thisExp.addData('response_given', probe_resp_test.keys[0])
            thisExp.addData('response_rt', key_resp.rt)
        else:
            thisExp.addData('response_given', None)
            thisExp.addData('response_rt', None)

        thisExp.addData('good_answer_counter', answer_counter)
    CodeComponent eeg_blank_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if break_random.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x40') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine end_of_block
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Bloc terminé, utilisez la barre d’espace pour continuer.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_exp
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Merci d'avoir participé !
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    KeyboardComponent end_exp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent last_data_save
      Code Type = Auto->JS
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      Begin Experiment:
        #count participants answers percentages

        percentage_right_answer = (answer_counter/36) * 100
        thisExp.addData('%_answer', percentage_right_answer)
  Routine start_eeg
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    TextComponent eeg_start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Vérifier EEG
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    KeyboardComponent exit_eeg_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_eeg_1
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        rec_start = core.monotonicClock.getTime()
        rcs.startRecording()
  Routine image_loader
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    TextComponent empty_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    StaticComponent image_load
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine image_load_2
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    TextComponent Image_load_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    StaticComponent load_images_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine rest_instr
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    TextComponent instr_rest_state
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Il vous est demandé de rester devant l'écran, les yeux ouverts, sans rien faire pendant les prochaines minutes
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_state
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    CodeComponent eeg_fix_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
Flow
  Routine instructions
  Routine start_eeg
  LoopInitiator blocks_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine instructions_learning
    LoopInitiator learn_images loopType="TrialHandler"
      conditionsFile = $condition_learn
      loopType = random
      nReps = 3
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      conditions:
        [OrderedDict([('pair_name', 'C_D'), ('stim1_img', 'stimuli/banana.png'), ('stim2_img', 'stimuli/face.png')]),
        OrderedDict([('pair_name', 'B_C'), ('stim1_img', 'stimuli/zebra.png'), ('stim2_img', 'stimuli/banana.png')]),
        OrderedDict([('pair_name', 'A_B'), ('stim1_img', 'stimuli/scissor.png'), ('stim2_img', 'stimuli/zebra.png')]),
        OrderedDict([('pair_name', 'C_D'), ('stim1_img', 'stimuli/banana.png'), ('stim2_img', 'stimuli/face.png')]),
        OrderedDict([('pair_name', 'C_D'), ('stim1_img', 'stimuli/banana.png'), ('stim2_img', 'stimuli/face.png')]),
        OrderedDict([('pair_name', 'A_B'), ('stim1_img', 'stimuli/scissor.png'), ('stim2_img', 'stimuli/zebra.png')]),
        OrderedDict([('pair_name', 'B_C'), ('stim1_img', 'stimuli/zebra.png'), ('stim2_img', 'stimuli/banana.png')]),
        OrderedDict([('pair_name', 'A_B'), ('stim1_img', 'stimuli/scissor.png'), ('stim2_img', 'stimuli/zebra.png')]),
        OrderedDict([('pair_name', 'B_C'), ('stim1_img', 'stimuli/zebra.png'), ('stim2_img', 'stimuli/banana.png')])]
      Routine image_load_2
      Routine fix_learning
      Routine image_learn_1
      Routine break_img_learn
      Routine image_learn_2
      Routine routine_5s_break
    LoopTerminator learn_images
    Routine probe_instr
    LoopInitiator probe_loop loopType="TrialHandler"
      conditionsFile = $condition_probe
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('target_img', 'stimuli/scissor.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/banana.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/banana.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/face.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/scissor.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/scissor.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/zebra.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/banana.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/zebra.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/face.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/zebra.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/zebra.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/banana.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/banana.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/zebra.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/face.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/scissor.png'), ('corrAns', 2)])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
      Routine image_loader
      Routine probe_cue
      Routine probe_imagination
      Routine probe_test
      Routine probe_resp
      Routine probe_break
    LoopTerminator probe_loop
    Routine end_of_block
  LoopTerminator blocks_loop
  Routine rest_instr
  Routine rest_state
  Routine end_exp
