PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/cued_mental_stim/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = cued_mental_stim
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instr_task
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    CodeComponent init_eeg
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        # EEG
        import struct
        import serial
        import time
        # Trigger box Plus COM port
        adress = 'COM17'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=2000000)
            time.sleep(1) # Wait to make sure it's open
            return port

        def write_port(port, pin):
            """
            Turn on one of the ditigal pin
            pin: integer in range 2-13
            """
            # Convert to string
            string = b'' + struct.pack('!B', pin)
            # Write
            port.write(string)

        port = init_port(adress)
        port.write([0x00])

        # Init EEG
        from psychopy.hardware import brainproducts
        rcs = brainproducts.RemoteControlServer(host='192.168.1.2',timeout=5)

        rcs.openRecorder()
        time.sleep(2)
        rcs.workspace = 'C:/Users/labmp-eeg/Desktop/antoine_cognitivemaps/antoine_cognitivemaps.rwksp'
        rcs.participant = expInfo['participant'] + '_' + expInfo['date']
        rcs.expName = 'cmaps_cued_stim'
        time.sleep(5)
        rcs.mode = 'monitor'
        time.sleep(2)
    CodeComponent start_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import pandas as pd
        #add counterbalance and allowed keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])



        instr_1 = 'Un indice apparaîtra pour vous guider dans la mentalisation de la séquence: si vous voyez "1 - 4", imaginez les images dans cet ordre de 1 à 4 ; si "4 - 1", imaginez-les de 4 à 1. Ensuite, une image sera présenté et vous devrez décider si elle fait partie de la séquence que vous venez de visualiser mentalement : appuyez sur 1 si elle en fait partie, et sur 2 sinon. Après votre réponse, évaluez la vivacité de votre mentalisation sur une échelle de 1 à 5, où 1 signifie "Très peu vive" et 5 "Très vive". Appuyez sur la barre espace pour commencer.'
        instr_2 = 'Un indice apparaîtra pour vous guider dans la mentalisation de la séquence: si vous voyez "1 - 4", imaginez les images dans cet ordre de 1 à 4 ; si "4 - 1", imaginez-les de 4 à 1. Ensuite, une image sera présenté et vous devrez décider si elle fait partie de la séquence que vous venez de visualiser mentalement : appuyez sur 2 si elle en fait partie, et sur 1 sinon. Après votre réponse, évaluez la vivacité de votre mentalisation sur une échelle de 1 à 5, où 1 signifie "Très peu vive" et 5 "Très vive". Appuyez sur la barre espace pour commencer.'

        if last_three_digits % 2 == 0:
            sequence_good = '1'
            sequence_bad = '2'
            instr_message = instr_1
        else :
            sequence_good = '2'
            sequence_bad = '1'
            instr_message = instr_2

        allowed_keys_list = [sequence_good, sequence_bad]

        # Store these for later use in routines
        expInfo['sequence_good_key'] = sequence_good
        expInfo['sequence_bad_key'] = sequence_bad
        expInfo['allowed_keys_list'] = allowed_keys_list


        condition_part = f"conditions/p{last_three_digits}_mental_sim_conditions.csv"
    TextComponent task_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_message
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    KeyboardComponent quit_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent photo_sensor
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if probe_image.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # This code runs before each trial starts.
        # It calculates the random ISI and sets the start time for the probe.
        isi_duration = random.uniform(1.0, 3.0)
        probe_start_time = 2.0 + 10.0 + isi_duration # cue_dur + sim_dur + isi_dur

        response_start_instr = probe_start_time + 2.0
    CodeComponent eeg_triggers
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent_fix = 0
        wait_sent_img = 0
        wait_sent_cue = 0

        #trigger 0 = fixation cross for learning
      Each Frame:
        if cue_stim.status == STARTED and wait_sent_cue == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x10') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent_cue = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
            port.write([0x00])


        if fixation_stim.status == STARTED and wait_sent_fix = 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent_fix = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
            port.write([0x00])


        if prob_image.status == STARTED and wait_sent_img = 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x04') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent_img = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
            port.write([0x00])
      End Routine:
        port.write([0x00])
    TextComponent cue_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set during: image_load.imag_loader] = $cue_text
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    TextComponent fixation_stim
      letterHeight = 0.15
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = +
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    ImageComponent probe_image
      image [set during: image_load.imag_loader] = $probe_image_file
      size = (0.5, 0.5)
      startVal [time (s)] = $probe_start_time
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_probe
      allowedKeys [set every repeat] = $allowed_keys_list
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = $probe_start_time
      storeCorrect = True
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    TextComponent resp_instr
      letterHeight = 0.05
      startVal [time (s)] = $response_start_instr
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      text [set every repeat]:
        Est-ce que l'image fait partie de ceux que vous venez d'imaginer ?

        Indiquer cela à l'aide du boitier de réponse (gauche - droite)
  Routine rating
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    SliderComponent rating_vividness
      forceEndRoutine = True
      granularity = 0
      labels = ['Not at all', 'Slightly', 'Moderately', 'Very']
      letterHeight = 0.05
      pos = [0, -0.1]
      readOnly = True
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4)
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    TextComponent text_rating_question
      letterHeight = 0.05
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      text = Quelle était la vivacité de votre simulation mentale ?
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    KeyboardComponent key_resp_rating
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent eeg_resp
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if text_rating_question.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x08') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine block_break
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    TextComponent block_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_break_dur
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_block_break
      Code Type = Auto->JS
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      Begin Routine:
        # This code determines if the break screen should be shown.
        # `trials_loop.thisN` is the current trial number (starting from 0).
        # We want a break after trial 31 (thisN=31) and 63 (thisN=63).

        # The modulo operator (%) gives the remainder of a division.
        # (thisN + 1) % 32 == 0 checks if we are at the end of a block of 32.

        # We also don't want to show it after the very last trial.
        if (trials_loop.thisN + 1) % 32 == 0 and (trials_loop.thisN + 1) < trials_loop.nTotal:
            # It's a break time! Update the text.
            block_num = (trials_loop.thisN + 1) // 32
            block_break_text.text = f'You have completed block {block_num} of 3.\n\nPress space to continue.'
        else:
            # It's not a break time, so skip this entire routine.
            continueRoutine = False

        block_break_dur = 60
  Routine end_task
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Thank you text 
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    KeyboardComponent exit_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_eeg
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    CodeComponent start_eeg_1
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        rec_start = core.monotonicClock.getTime()
        rcs.startRecording()
    TextComponent EEG_start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Vérifier EEG
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    KeyboardComponent exit_eeg_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_load
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    TextComponent image_load_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    StaticComponent imag_loader
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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Flow
  Routine instr_task
  Routine start_eeg
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = $condition_part
    loopType = random
    nReps = 1
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    Routine image_load
    Routine trial
    Routine rating
    Routine block_break
  LoopTerminator trials_loop
  Routine end_task
