PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/cued_mental_stim/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = cued_mental_stim
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instr_task
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    CodeComponent start_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import pandas as pd
        #add counterbalance and allowed keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])



        instr_1 = 'Un indice apparaîtra pour vous guider dans la mentalisation de la séquence: si vous voyez "1 - 4", imaginez les images dans cet ordre de 1 à 4 ; si "4 - 1", imaginez-les de 4 à 1. Ensuite, une image sera présenté et vous devrez décider si elle fait partie de la séquence que vous venez de visualiser mentalement : appuyez sur 1 si elle en fait partie, et sur 2 sinon. Après votre réponse, évaluez la vivacité de votre mentalisation sur une échelle de 1 à 5, où 1 signifie "Très peu vive" et 5 "Très vive". Appuyez sur la barre espace pour commencer.'
        instr_2 = 'Un indice apparaîtra pour vous guider dans la mentalisation de la séquence: si vous voyez "1 - 4", imaginez les images dans cet ordre de 1 à 4 ; si "4 - 1", imaginez-les de 4 à 1. Ensuite, une image sera présenté et vous devrez décider si elle fait partie de la séquence que vous venez de visualiser mentalement : appuyez sur 2 si elle en fait partie, et sur 1 sinon. Après votre réponse, évaluez la vivacité de votre mentalisation sur une échelle de 1 à 5, où 1 signifie "Très peu vive" et 5 "Très vive". Appuyez sur la barre espace pour commencer.'

        if last_three_digits % 2 == 0:
            sequence_good = '1'
            sequence_bad = '2'
            instr_message = instr_1
        else :
            sequence_good = '2'
            sequence_bad = '1'
            instr_message = instr_2

        allowed_keys_list = [sequence_good, sequence_bad]

        # Store these for later use in routines
        expInfo['sequence_good_key'] = sequence_good
        expInfo['sequence_bad_key'] = sequence_bad
        expInfo['allowed_keys_list'] = allowed_keys_list


        condition_part = f"conditions/p{last_three_digits}_mental_sim_conditions.csv"
    TextComponent task_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_message
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    KeyboardComponent quit_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent cue_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $cue_text
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    TextComponent fixation_stim
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = +
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    ImageComponent probe_image
      image [set every repeat] = $probe_image
      size = (0.5, 0.5)
      startVal [time (s)] = $probe_start_time
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_probe
      allowedKeys [set every repeat] = $allowed_keys_list
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = $probe_start_time
      storeCorrect = True
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # This code runs before each trial starts.
        # It calculates the random ISI and sets the start time for the probe.
        isi_duration = random.uniform(1.0, 3.0)
        probe_start_time = 2.0 + 10.0 + isi_duration # cue_dur + sim_dur + isi_dur
  Routine rating
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    SliderComponent rating_vividness
      forceEndRoutine = True
      granularity = 0
      labels = ['Not at all', 'Slightly', 'Moderately', 'Very']
      letterHeight = 0.05
      pos = [0, -0.1]
      readOnly = True
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4)
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    TextComponent text_rating_question
      letterHeight = 0.05
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      text = How vivid was your mental simulation?
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    KeyboardComponent key_resp_rating
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_break
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    TextComponent block_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $block_break_dur
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_block_break
      Code Type = Auto->JS
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      Begin Routine:
        # This code determines if the break screen should be shown.
        # `trials_loop.thisN` is the current trial number (starting from 0).
        # We want a break after trial 31 (thisN=31) and 63 (thisN=63).

        # The modulo operator (%) gives the remainder of a division.
        # (thisN + 1) % 32 == 0 checks if we are at the end of a block of 32.

        # We also don't want to show it after the very last trial.
        if (trials_loop.thisN + 1) % 32 == 0 and (trials_loop.thisN + 1) < trials_loop.nTotal:
            # It's a break time! Update the text.
            block_num = (trials_loop.thisN + 1) // 32
            block_break_text.text = f'You have completed block {block_num} of 3.\n\nPress space to continue.'
        else:
            # It's not a break time, so skip this entire routine.
            continueRoutine = False

        block_break_dur = 60
  Routine end_task
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Thank you text 
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    KeyboardComponent exit_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr_task
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = $condition_part
    loopType = random
    nReps = 1
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    Routine trial
    Routine rating
    Routine block_break
  LoopTerminator trials_loop
  Routine end_task
