PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'sub-000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = learn_probe
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine instructions
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    TextComponent instructions_main
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Add instructions here

        space to end
    KeyboardComponent instr_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent exp_beginning
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        #add counterbalance and allowed keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])

        if last_three_digits % 2 == 0:
            sequence_good = '1'
            sequence_bad = '2'
            instr_message = " Vous verrez une image. Vous devrez ensuite vous imaginer la séquence complète des images qui la suivent. Une seconde image apparaîtra ensuite. Appuyez sur '1' si cette image est la prochaine dans la séquence, et sur '2' si ce n’est pas le cas. Appuyez sur la barre d’espace pour commencer."
        else :
            sequence_good = '2'
            sequence_bad = '1'
            instr_message = " Vous verrez une image. Vous devrez ensuite vous imaginer la séquence complète des images qui la suivent. Une seconde image apparaîtra ensuite. Appuyez sur '2' si cette image est la prochaine dans la séquence, et sur '1' si ce n’est pas le cas. Appuyez sur la barre d’espace pour commencer."

        allowed_keys_list = [sequence_good, sequence_bad]

        # Store these for later use in routines
        expInfo['sequence_good_key'] = sequence_good
        expInfo['sequence_bad_key'] = sequence_bad
        expInfo['allowed_keys_list'] = allowed_keys_list

        #open condition file to create list of sequence_good per trials
        import pandas as pd

        condition_probe = f"conditions_probe/probe_learning_conditions_{last_three_digits}.csv"

        condition_learn = f"conditions_learning/learning_conditions_{last_three_digits}.csv"
  Routine instructions_learning
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = add learning instr here
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_learning
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    TextComponent fix_learn_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine image_learn_1
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    ImageComponent first_of_pair
      image [set every repeat] = $stim1_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine break_img_learn
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    CodeComponent random_break_timer
      Code Type = Auto->JS
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      Begin Routine:
        import random

        random_break = random.uniform(1.0, 3.0)
    TextComponent break_random
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random_break
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  Routine image_learn_2
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    ImageComponent second_of_pair
      image [set every repeat] = $stim2_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine routine_5s_break
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    TextComponent five_s_break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent save_data_learn
      Code Type = Auto->JS
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      End Routine:
        # store data
        thisExp.addData('pair_stim_1',stim1_img)
        thisExp.addData('pair_stim_2',stim2_img)
        thisExp.addData('random_break_dur',random_break)
  Routine probe_instr
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    TextComponent probe_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $instr_message
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    KeyboardComponent end_probe_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine probe_cue
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    ImageComponent probe_cue_1
      image [set every repeat] = $target_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine probe_imagination
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    CodeComponent imagination_timer
      Code Type = Auto->JS
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      Begin Routine:
        import random

        prob_imagination_dur = random.uniform(1.0, 3.0)
    TextComponent imagination_woot
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prob_imagination_dur
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  Routine probe_test
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    ImageComponent prob_test_img
      image [set every repeat] = $prob_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine probe_resp
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    KeyboardComponent probe_resp_test
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = answer
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  Routine probe_break
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random

        prob_break = random.uniform(1.0, 3.0)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prob_break
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    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        #store data
        thisExp.addData('target_image', target_img)
        thisExp.addData('probe_image', prob_img)

        if is_match == 'match':
            correct_key = sequence_good
        else :
            correct_key = sequence_bad

        if probe_resp_test.keys and probe_resp_test.keys[0] == correct_key:
            thisExp.addData('response_good_bad', 1)
        else:
            thisExp.addData('response_good_bad', 0)

        if probe_resp_test.keys:
            thisExp.addData('response_given', probe_resp_test.keys[0])
            thisExp.addData('response_rt', key_resp.rt)
        else:
            thisExp.addData('response_given', None)
            thisExp.addData('response_rt', None)
  Routine end_of_block
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of block text

        Space to quit
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_of_block_shuffler
      Code Type = Auto->JS
      Begin Routine:
        #reshufle conditions files for participants
Flow
  Routine instructions
  LoopInitiator blocks_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine instructions_learning
    LoopInitiator learn_images loopType="TrialHandler"
      conditionsFile = $condition_learn
      loopType = random
      nReps = 3
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      conditions:
        [OrderedDict([('pair_name', 'C_D'), ('stim1_img', 'stimuli/banana.png'), ('stim2_img', 'stimuli/face.png')]),
        OrderedDict([('pair_name', 'B_C'), ('stim1_img', 'stimuli/zebra.png'), ('stim2_img', 'stimuli/banana.png')]),
        OrderedDict([('pair_name', 'A_B'), ('stim1_img', 'stimuli/scissor.png'), ('stim2_img', 'stimuli/zebra.png')]),
        OrderedDict([('pair_name', 'C_D'), ('stim1_img', 'stimuli/banana.png'), ('stim2_img', 'stimuli/face.png')]),
        OrderedDict([('pair_name', 'C_D'), ('stim1_img', 'stimuli/banana.png'), ('stim2_img', 'stimuli/face.png')]),
        OrderedDict([('pair_name', 'A_B'), ('stim1_img', 'stimuli/scissor.png'), ('stim2_img', 'stimuli/zebra.png')]),
        OrderedDict([('pair_name', 'B_C'), ('stim1_img', 'stimuli/zebra.png'), ('stim2_img', 'stimuli/banana.png')]),
        OrderedDict([('pair_name', 'A_B'), ('stim1_img', 'stimuli/scissor.png'), ('stim2_img', 'stimuli/zebra.png')]),
        OrderedDict([('pair_name', 'B_C'), ('stim1_img', 'stimuli/zebra.png'), ('stim2_img', 'stimuli/banana.png')])]
      Routine fix_learning
      Routine image_learn_1
      Routine break_img_learn
      Routine image_learn_2
      Routine routine_5s_break
    LoopTerminator learn_images
    Routine probe_instr
    LoopInitiator probe_loop loopType="TrialHandler"
      conditionsFile = $condition_probe
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('target_img', 'stimuli/scissor.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/banana.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/banana.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/face.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/scissor.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/scissor.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/zebra.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/banana.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/zebra.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/face.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/zebra.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/zebra.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/banana.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/banana.png'), ('corrAns', 1)]),
        OrderedDict([('target_img', 'stimuli/zebra.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/face.png'), ('corrAns', 2)]),
        OrderedDict([('target_img', 'stimuli/face.png'), ('cue_text', '->...->...->?'), ('prob_img', 'stimuli/scissor.png'), ('corrAns', 2)])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
      Routine probe_cue
      Routine probe_imagination
      Routine probe_test
      Routine probe_resp
      Routine probe_break
    LoopTerminator probe_loop
    Routine end_of_block
  LoopTerminator blocks_loop
